<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.4"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:p2="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateFrame" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Prefix</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>_FrameEvents.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.FrameEventLogger.bonsai">
        <Name>SyncQuad</Name>
        <Append>false</Append>
        <Overwrite>false</Overwrite>
        <Suffix>None</Suffix>
        <FileName />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Prefix</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>_Encoder.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.FrameEventLogger.bonsai">
        <Name>Encoder</Name>
        <Append>false</Append>
        <Overwrite>false</Overwrite>
        <Suffix>None</Suffix>
        <FileName />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Prefix</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>_Responses.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.FrameEventLogger.bonsai">
        <Name>Responses</Name>
        <Append>false</Append>
        <Overwrite>false</Overwrite>
        <Suffix>None</Suffix>
        <FileName />
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>Tick</Name>
      </Expression>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateViewportState">
          <gl:X>0</gl:X>
          <gl:Y>0</gl:Y>
          <gl:Width>1</gl:Width>
          <gl:Height>1</gl:Height>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>0</Left>
        <Right>1</Right>
        <Bottom>0</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Seed" />
        <Property Name="P" />
        <Property Name="Offset" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ContinuousSync</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Tick</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Seed" />
              <Property Name="P" />
              <Property Name="Offset" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SyncSequence">
                <p1:Seed>0</p1:Seed>
                <p1:P>1</p1:P>
                <p1:Offset>30</p1:Offset>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Unit" />
            <Expression xsi:type="p2:BehaviorCommand">
              <p2:Type>ClearOutput</p2:Type>
              <p2:Mask>Port0</p2:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Command</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ActiveTrial</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>{0},{1}</Format>
        <Selector>Item1,Item2</Selector>
        <Name>SyncQuad</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>HarpSync</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="FloatProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p2:BehaviorCommand">
              <p2:Type>SetOutput</p2:Type>
              <p2:Mask>Digital0</p2:Mask>
            </Expression>
            <Expression xsi:type="LessThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p2:BehaviorCommand">
              <p2:Type>ClearOutput</p2:Type>
              <p2:Mask>Digital0</p2:Mask>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Command</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ColorR" />
          <Property Name="ColorG" />
          <Property Name="ColorB" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>0.1</ExtentX>
        <ExtentY>0.3</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
        <ColorR>1</ColorR>
        <ColorG>1</ColorG>
        <ColorB>1</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Request</Name>
      </Expression>
      <Expression xsi:type="osc:Parse">
        <osc:Address>/clear</osc:Address>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="p2:BehaviorCommand">
        <p2:Type>ClearOutput</p2:Type>
        <p2:Mask>Port0</p2:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Command</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigEncoder</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:LatestOnUpdateFrame" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ActiveTrial</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item2 as TrialID,
Item1 as Encoder)</scr:Expression>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>{0},{1}</Format>
        <Selector>TrialID,Encoder</Selector>
        <Name>Encoder</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigResponse</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:SampleOnUpdateFrame" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ActiveTrial</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item2 as TrialID,
Item1 as Response)</scr:Expression>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>{0},{1}</Format>
        <Selector>TrialID,Response</Selector>
        <Name>Responses</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="12" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="26" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source2" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="36" Label="Source1" />
      <Edge From="35" To="36" Label="Source2" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="42" Label="Source1" />
      <Edge From="41" To="42" Label="Source2" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>