<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.4"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SuppressResponse</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TrialParameters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialParameters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SuppressDuration</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>SuppressMilliseconds</scr:Name>
              <scr:Expression>TimeSpan.FromMilliseconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT2S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialResponse</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="12" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>